PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3440, 1440]
  color = white
  expName = FacesNamesProffessions_Encoding
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Routines
  Routine Instructions
    TextComponent text
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Instruktioner:

        Du kommer att se bilder presenterade en i taget.
        Din uppgift är att avgöra om det är första gången du ser bilden (New) eller om du har sett bilden tidigare (Old).

        Svara på varje bild med hjälp av följande knappar:
        1 (pekfinger) = New
        2 (långfinger) = Old

        Vid senare tillfälle under uppgiftens gång kommer du att se bilder presenterade en i taget ovanför tre pilar markerade i orange som pekar åt vänster, uppåt och höger.
        Din uppgift är att välja den riktning som du minns tidigare har presenterats under den aktuella bilden.

        Svara på varje bild och pil med hjälp av följande knappar:
        1 (pekfinger) = Vänster
        2 (långfinger) = Upp
        3 (ringfinger) = Höger

        I början och i mitten av uppgiften kommer du att se brusiga bilder.
        Titta bara på de brusiga bilderna utan att trycka på någon knapp.

        Tryck med pekfingret och meddela när du är redo att börja.
    KeyboardComponent key_resp_0
      allowedKeys = '1','2','3','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fix_cross
    PolygonComponent polygon
      fillColor = black
      lineWidth = 0.1
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      stopVal [duration (s)] = $jitter[0]
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  Routine Uncued_trial
    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = '1','2','3'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    ImageComponent image_2
      flipHoriz = True
      image [set every repeat] = $StimFile
      pos = (0, 0.125)
      size = (0.743, 0.750)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent text_5
      color = black
      letterHeight = 0.1
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $Letter1 + '\t' * 6 + Letter2 + '\t' * 6 + Letter3
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  Routine Finished
    TextComponent text_2
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Bra jobbat!

        Du har slutfört uppgiften.
        Fortsätt ligga stilla så kommer vi prata med dig alldeles strax.
  Routine T
  Routine Scrambled_2
    ImageComponent ScrambledImg2
      image [set every repeat] = $Scrambled2
      pos = (0, 0.125)
      size = (0.743, 0.750)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent Scrambled_options2
      image [set every repeat] = Gallery_arrowoptions.png
      pos = (0, -0.375)
      size = (1, 0.250)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine Scrambled_1
    ImageComponent ScrambledImg
      image [set every repeat] = $Scrambled1
      pos = (0, 0.125)
      size = (0.743, 0.750)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent Arrow1
      image [set every repeat] = Gallery_newold.png
      pos = (0, -0.375)
      size = (1, 0.250)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine Wait_fmri
  Routine Wait_fMRI
    PolygonComponent polygon_2
      fillColor = black
      lineWidth = 0.001
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 's'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if (key_resp.keys) == 's':
            core.wait(15)
            continueRoutine = False
  Routine Instructions_recog
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        You will see images presented one at a time.
        Your task is to tell if it is the first time you see the image (New) or if you have seen the image before (Old)

        Respond to each image using the following buttons:
        1 (index finger) = New
        2 (middle finger) = Old
  Routine Circle
    PolygonComponent polygon_3
      lineColor = black
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_3
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine ImmediateRecall_trial
    KeyboardComponent key_resp_ImmediateRecall
      allowedKeys [set every repeat] = '1','2','3'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    ImageComponent image_3
      image [set every repeat] = $StimFile
      pos = (0, 0.125)
      size = (0.743, 0.750)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent text_6
      color = black
      letterHeight = 0.1
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $Letter1 + '\t' * 6 + Letter2 + '\t' * 6 + Letter3
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  Routine Encoding_trial
    KeyboardComponent key_resp_1
      allowedKeys [set every repeat] = '1','2','3'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    ImageComponent image
      contrast = 0
      image [set every repeat] = $StimFile
      pos = (0, 0.125)
      size = (0.743, 0.750)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent text_4
      color = black
      letterHeight = 0.1
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        jitter = np.arange(2.5, 10, .25)
        shuffle(jitter)
      Begin Routine:
        jitter = np.arange(2.5, 10, .25)
        shuffle(jitter)
        thisExp.addData('Jitter', jitter[0])

        if Name == 0:
            text_4.text = Proffession
        else:
            text_4.text = Name
Flow
  Routine Instructions
  Routine Wait_fMRI
  LoopInitiator Name_trials loopType="TrialHandler"
    conditionsFile = TrialRows.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [{'TrialRows_Name': '0:6', 'TrialRows_Proffession': '30:36'},
      {'TrialRows_Name': '6:12', 'TrialRows_Proffession': '36:42'},
      {'TrialRows_Name': '12:18', 'TrialRows_Proffession': '42:48'},
      {'TrialRows_Name': '18:24', 'TrialRows_Proffession': '48:54'},
      {'TrialRows_Name': '24:30', 'TrialRows_Proffession': '54:60'}]
    LoopInitiator Encoding_Name loopType="TrialHandler"
      Selected rows = $TrialRows_Name
      conditionsFile = Encoding.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/O31.jpg', 'Name': 'Mohamed', 'Proffession': 0, 'Letter1': 'M.', 'Letter2': 'K.', 'Letter3': 'J.'},
        {'Task': 'encoding_name', 'corrAns': 1, 'StimFile': 'Images_Faces/O32.jpg', 'Name': 'John', 'Proffession': 0, 'Letter1': 'J.', 'Letter2': 'K.', 'Letter3': 'J.'},
        {'Task': 'encoding_name', 'corrAns': 2, 'StimFile': 'Images_Faces/O33.jpg', 'Name': 'Mattias', 'Proffession': 0, 'Letter1': 'M.', 'Letter2': 'L.', 'Letter3': 'J.'},
        {'Task': 'encoding_name', 'corrAns': 2, 'StimFile': 'Images_Faces/O34.jpg', 'Name': 'Mats', 'Proffession': 0, 'Letter1': 'M.', 'Letter2': 'L.', 'Letter3': 'J.'},
        {'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/O35.jpg', 'Name': 'Henrik', 'Proffession': 0, 'Letter1': 'H.', 'Letter2': 'L.', 'Letter3': 'J.'},
        {'Task': 'encoding_name', 'corrAns': 1, 'StimFile': 'Images_Faces/O36.jpg', 'Name': 'Jonas', 'Proffession': 0, 'Letter1': 'J.', 'Letter2': 'M.', 'Letter3': 'I.'},
        {'Task': 'encoding_name', 'corrAns': 2, 'StimFile': 'Images_Faces/O37.jpg', 'Name': 'Ulf', 'Proffession': 0, 'Letter1': 'U.', 'Letter2': 'M.', 'Letter3': 'H.'},
        {'Task': 'encoding_name', 'corrAns': 1, 'StimFile': 'Images_Faces/O38.jpg', 'Name': 'Leif', 'Proffession': 0, 'Letter1': 'L.', 'Letter2': 'M.', 'Letter3': 'H.'},
        {'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/O39.jpg', 'Name': 'Björn', 'Proffession': 0, 'Letter1': 'B.', 'Letter2': 'M.', 'Letter3': 'H.'}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
      Routine Encoding_trial
      Routine fix_cross
      Routine Circle
    LoopTerminator Encoding_Name
    LoopInitiator ImmediateRecall_Name loopType="TrialHandler"
      Selected rows = $TrialRows_Name
      conditionsFile = Encoding.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/O31.jpg', 'Name': 'Mohamed', 'Proffession': 0, 'Letter1': 'M.', 'Letter2': 'K.', 'Letter3': 'J.'},
        {'Task': 'encoding_name', 'corrAns': 1, 'StimFile': 'Images_Faces/O32.jpg', 'Name': 'John', 'Proffession': 0, 'Letter1': 'J.', 'Letter2': 'K.', 'Letter3': 'J.'},
        {'Task': 'encoding_name', 'corrAns': 2, 'StimFile': 'Images_Faces/O33.jpg', 'Name': 'Mattias', 'Proffession': 0, 'Letter1': 'M.', 'Letter2': 'L.', 'Letter3': 'J.'},
        {'Task': 'encoding_name', 'corrAns': 2, 'StimFile': 'Images_Faces/O34.jpg', 'Name': 'Mats', 'Proffession': 0, 'Letter1': 'M.', 'Letter2': 'L.', 'Letter3': 'J.'},
        {'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/O35.jpg', 'Name': 'Henrik', 'Proffession': 0, 'Letter1': 'H.', 'Letter2': 'L.', 'Letter3': 'J.'},
        {'Task': 'encoding_name', 'corrAns': 1, 'StimFile': 'Images_Faces/O36.jpg', 'Name': 'Jonas', 'Proffession': 0, 'Letter1': 'J.', 'Letter2': 'M.', 'Letter3': 'I.'},
        {'Task': 'encoding_name', 'corrAns': 2, 'StimFile': 'Images_Faces/O37.jpg', 'Name': 'Ulf', 'Proffession': 0, 'Letter1': 'U.', 'Letter2': 'M.', 'Letter3': 'H.'},
        {'Task': 'encoding_name', 'corrAns': 1, 'StimFile': 'Images_Faces/O38.jpg', 'Name': 'Leif', 'Proffession': 0, 'Letter1': 'L.', 'Letter2': 'M.', 'Letter3': 'H.'},
        {'Task': 'encoding_name', 'corrAns': 3, 'StimFile': 'Images_Faces/O39.jpg', 'Name': 'Björn', 'Proffession': 0, 'Letter1': 'B.', 'Letter2': 'M.', 'Letter3': 'H.'}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
      Routine ImmediateRecall_trial
      Routine fix_cross
      Routine Circle
    LoopTerminator ImmediateRecall_Name
  LoopTerminator Name_trials
  LoopInitiator Proffession_trials loopType="TrialHandler"
    conditionsFile = TrialRows.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'TrialRows_Name': '0:6', 'TrialRows_Proffession': '30:36'},
      {'TrialRows_Name': '6:12', 'TrialRows_Proffession': '36:42'},
      {'TrialRows_Name': '12:18', 'TrialRows_Proffession': '42:48'},
      {'TrialRows_Name': '18:24', 'TrialRows_Proffession': '48:54'},
      {'TrialRows_Name': '24:30', 'TrialRows_Proffession': '54:60'}]
    LoopInitiator Encoding_Proffession loopType="TrialHandler"
      Selected rows = $TrialRows_Proffession
      conditionsFile = Encoding.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine Encoding_trial
      Routine fix_cross
      Routine Circle
    LoopTerminator Encoding_Proffession
    LoopInitiator ImmediateRecall_Proffession loopType="TrialHandler"
      Selected rows = $TrialRows_Proffession
      conditionsFile = Encoding.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine ImmediateRecall_trial
      Routine fix_cross
      Routine Circle
    LoopTerminator ImmediateRecall_Proffession
  LoopTerminator Proffession_trials
  Routine Finished
