PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3440, 1440]
  color = white
  expName = FacesNamesProffessions_Encoding
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Routines
  Routine trial
    KeyboardComponent key_resp_1
      allowedKeys [set every repeat] = '1','2','3'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    ImageComponent image
      contrast = 0
      image [set every repeat] = $StimFile
      pos = (0, 0.125)
      size = (0.743, 0.750)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent text_4
      color = black
      letterHeight = 0.1
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $Letter1 + '\t' * 6 + Letter2 + '\t' * 6 + Letter3
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        jitter = np.arange(2.5, 10, .25)
        shuffle(jitter)
      Begin Routine:
        jitter = np.arange(2.5, 10, .25)
        shuffle(jitter)
        thisExp.addData('Jitter', jitter[0])
  Routine Instructions
    TextComponent text
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Instruktioner:

        Du kommer att se bilder presenterade en i taget.
        Din uppgift är att avgöra om det är första gången du ser bilden (New) eller om du har sett bilden tidigare (Old).

        Svara på varje bild med hjälp av följande knappar:
        1 (pekfinger) = New
        2 (långfinger) = Old

        Vid senare tillfälle under uppgiftens gång kommer du att se bilder presenterade en i taget ovanför tre pilar markerade i orange som pekar åt vänster, uppåt och höger.
        Din uppgift är att välja den riktning som du minns tidigare har presenterats under den aktuella bilden.

        Svara på varje bild och pil med hjälp av följande knappar:
        1 (pekfinger) = Vänster
        2 (långfinger) = Upp
        3 (ringfinger) = Höger

        I början och i mitten av uppgiften kommer du att se brusiga bilder.
        Titta bara på de brusiga bilderna utan att trycka på någon knapp.

        Tryck med pekfingret och meddela när du är redo att börja.
    KeyboardComponent key_resp_0
      allowedKeys = '1','2','3','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fix_cross
    PolygonComponent polygon
      fillColor = black
      lineWidth = 0.1
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      stopVal [duration (s)] = $jitter[0]
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  Routine Uncued_trial
    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = '1','2','3'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    ImageComponent image_2
      flipHoriz = True
      image [set every repeat] = $StimFile
      pos = (0, 0.125)
      size = (0.743, 0.750)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent text_5
      color = black
      letterHeight = 0.1
      pos = (0, -0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $Letter1 + '\t' * 6 + Letter2 + '\t' * 6 + Letter3
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  Routine Finished
    TextComponent text_2
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Bra jobbat!

        Du har slutfört uppgiften.
        Fortsätt ligga stilla så kommer vi prata med dig alldeles strax.
  Routine T
  Routine Scrambled_2
    ImageComponent ScrambledImg2
      image [set every repeat] = $Scrambled2
      pos = (0, 0.125)
      size = (0.743, 0.750)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent Scrambled_options2
      image [set every repeat] = Gallery_arrowoptions.png
      pos = (0, -0.375)
      size = (1, 0.250)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine Scrambled_1
    ImageComponent ScrambledImg
      image [set every repeat] = $Scrambled1
      pos = (0, 0.125)
      size = (0.743, 0.750)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent Arrow1
      image [set every repeat] = Gallery_newold.png
      pos = (0, -0.375)
      size = (1, 0.250)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine Wait_fmri
  Routine Wait_fMRI
    PolygonComponent polygon_2
      fillColor = black
      lineWidth = 0.001
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 's'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if (key_resp.keys) == 's':
            core.wait(15)
            continueRoutine = False
  Routine Instructions_recog
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        You will see images presented one at a time.
        Your task is to tell if it is the first time you see the image (New) or if you have seen the image before (Old)

        Respond to each image using the following buttons:
        1 (index finger) = New
        2 (middle finger) = Old
  Routine Circle
    PolygonComponent polygon_3
      lineColor = black
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_3
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine Instructions
  Routine Wait_fMRI
  LoopInitiator Recall_Name loopType="TrialHandler"
    Selected rows = 0:30
    conditionsFile = Gallery_block_recallNC.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Task': 'recall_names', 'corrAns': 1, 'StimFile': 'Images_Faces/O1.jpg', 'Name': 'Karl', 'Proffession': 0, 'Letter1': 'K.', 'Letter2': 'A.', 'Letter3': 'W.'},
      {'Task': 'recall_names', 'corrAns': 3, 'StimFile': 'Images_Faces/O2.jpg', 'Name': 'Erik', 'Proffession': 0, 'Letter1': 'E.', 'Letter2': 'A.', 'Letter3': 'W.'},
      {'Task': 'recall_names', 'corrAns': 2, 'StimFile': 'Images_Faces/O3.jpg', 'Name': 'Lars', 'Proffession': 0, 'Letter1': 'L.', 'Letter2': 'A.', 'Letter3': 'V.'},
      {'Task': 'recall_names', 'corrAns': 2, 'StimFile': 'Images_Faces/O4.jpg', 'Name': 'Anders', 'Proffession': 0, 'Letter1': 'A.', 'Letter2': 'A.', 'Letter3': 'U.'},
      {'Task': 'recall_names', 'corrAns': 3, 'StimFile': 'Images_Faces/O5.jpg', 'Name': 'Per', 'Proffession': 0, 'Letter1': 'P.', 'Letter2': 'A.', 'Letter3': 'T.'},
      {'Task': 'recall_names', 'corrAns': 3, 'StimFile': 'Images_Faces/O6.jpg', 'Name': 'Mikael', 'Proffession': 0, 'Letter1': 'M.', 'Letter2': 'Å.', 'Letter3': 'S.'},
      {'Task': 'recall_names', 'corrAns': 1, 'StimFile': 'Images_Faces/O7.jpg', 'Name': 'Johan', 'Proffession': 0, 'Letter1': 'J.', 'Letter2': 'B.', 'Letter3': 'S.'},
      {'Task': 'recall_names', 'corrAns': 3, 'StimFile': 'Images_Faces/O8.jpg', 'Name': 'Olof', 'Proffession': 0, 'Letter1': 'O.', 'Letter2': 'B.', 'Letter3': 'S.'},
      {'Task': 'recall_names', 'corrAns': 2, 'StimFile': 'Images_Faces/O9.jpg', 'Name': 'Nils', 'Proffession': 0, 'Letter1': 'N.', 'Letter2': 'B.', 'Letter3': 'R.'}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
    Routine trial
    Routine fix_cross
    Routine Circle
  LoopTerminator Recall_Name
  Routine fix_cross
  LoopInitiator Recall_Proffession loopType="TrialHandler"
    Selected rows = 30:60
    conditionsFile = Gallery_block_recallNC.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Task': 'recall_names', 'corrAns': 1, 'StimFile': 'Images_Faces/O1.jpg', 'Name': 'Karl', 'Proffession': 0, 'Letter1': 'K.', 'Letter2': 'A.', 'Letter3': 'W.'},
      {'Task': 'recall_names', 'corrAns': 3, 'StimFile': 'Images_Faces/O2.jpg', 'Name': 'Erik', 'Proffession': 0, 'Letter1': 'E.', 'Letter2': 'A.', 'Letter3': 'W.'},
      {'Task': 'recall_names', 'corrAns': 2, 'StimFile': 'Images_Faces/O3.jpg', 'Name': 'Lars', 'Proffession': 0, 'Letter1': 'L.', 'Letter2': 'A.', 'Letter3': 'V.'},
      {'Task': 'recall_names', 'corrAns': 2, 'StimFile': 'Images_Faces/O4.jpg', 'Name': 'Anders', 'Proffession': 0, 'Letter1': 'A.', 'Letter2': 'A.', 'Letter3': 'U.'},
      {'Task': 'recall_names', 'corrAns': 3, 'StimFile': 'Images_Faces/O5.jpg', 'Name': 'Per', 'Proffession': 0, 'Letter1': 'P.', 'Letter2': 'A.', 'Letter3': 'T.'},
      {'Task': 'recall_names', 'corrAns': 3, 'StimFile': 'Images_Faces/O6.jpg', 'Name': 'Mikael', 'Proffession': 0, 'Letter1': 'M.', 'Letter2': 'Å.', 'Letter3': 'S.'},
      {'Task': 'recall_names', 'corrAns': 1, 'StimFile': 'Images_Faces/O7.jpg', 'Name': 'Johan', 'Proffession': 0, 'Letter1': 'J.', 'Letter2': 'B.', 'Letter3': 'S.'},
      {'Task': 'recall_names', 'corrAns': 3, 'StimFile': 'Images_Faces/O8.jpg', 'Name': 'Olof', 'Proffession': 0, 'Letter1': 'O.', 'Letter2': 'B.', 'Letter3': 'S.'},
      {'Task': 'recall_names', 'corrAns': 2, 'StimFile': 'Images_Faces/O9.jpg', 'Name': 'Nils', 'Proffession': 0, 'Letter1': 'N.', 'Letter2': 'B.', 'Letter3': 'R.'}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
    Routine trial
    Routine fix_cross
    Routine Circle
  LoopTerminator Recall_Proffession
  Routine Finished
